PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = laptop17Inch
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 0.7882, 0.7647
  expName = mcgurk
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
  rush = True
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Routines
  Routine trial
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    CodeComponent prepareTrial
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        from psychopy import data
    MovieComponent congurentVideo
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $video_file
      size = (1.8, 1.0)
      startVal [time (s)] = 0
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  Routine instructions
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    CodeComponent prepareSequence
      Code Type = Auto->JS
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      Begin Routine:
        import random
        from psychopy import prefs
    TextComponent instructionsText
      color = -0.8902, -0.7490, -0.8039
      font = Courier New
      letterHeight = 0.085
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Добро пожаловать!

        Вы увидите несколько коротких видео
        После просмотра видео, Вам будет предложено ответить, что Вы услышали

         Если готовы, то нажмите пробел для того, чтобы начать
    KeyboardComponent proceedButton
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent textOptions
      Code Type = Py
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      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        instructionsText.alignText= 'center'
  Routine fixation
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    TextComponent fixationScreen
      color = -0.8902, -0.7490, -0.8039
      font = Courier New
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = *
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  Routine response
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    TextComponent responseScreen
      color = -0.8902, -0.7490, -0.8039
      font = Courier New
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = Что вы услышали?
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    TextboxComponent responseForm
      bold = False
      borderColor = -0.8196, -0.5059, -0.5529
      borderWidth = 1.5
      color = -0.8902, -0.7490, -0.8039
      editable = True
      font = Courier New
      letterHeight = 0.05
      padding = 0.01
      placeholder = Напишите, что вы услышали
      size = (0.9, 0.1)
      startVal [time (s)] = 1.0
      units = norm
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    KeyboardComponent submitButton
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent isiScreen
      letterHeight = 0.05
      startVal [time (s)] = submitButton.status == FINISHED
      stopVal [duration (s)] = 1.5
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  Routine thank_you
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    TextComponent thankYouText
      color = -0.8902, -0.7490, -0.8039
      font = Courier New
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Спасибо за участие!
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Flow
  Routine instructions
  LoopInitiator blocks_loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'video_file': 'stimuli/stimuli_ba_ba_ba_ba.mp4', 'condition': 'congruent', 'sound': 'ba_ba'},
      {'video_file': 'stimuli/stimuli_ba_ba_da_da.mp4', 'condition': 'non_congruent', 'sound': 'da_da'},
      {'video_file': 'stimuli/stimuli_ba_ba_va_va.mp4', 'condition': 'non_congruent', 'sound': 'va_va'},
      {'video_file': 'stimuli/stimuli_da_da_ba_ba.mp4', 'condition': 'non_congruent', 'sound': 'ba_ba'},
      {'video_file': 'stimuli/stimuli_da_da_da_da.mp4', 'condition': 'congruent', 'sound': 'da_da'},
      {'video_file': 'stimuli/stimuli_da_da_va_va.mp4', 'condition': 'non_congruent', 'sound': 'va_va'},
      {'video_file': 'stimuli/stimuli_va_va_ba_ba.mp4', 'condition': 'non_congruent', 'sound': 'ba_ba'},
      {'video_file': 'stimuli/stimuli_va_va_da_da.mp4', 'condition': 'non_congruent', 'sound': 'da_da'},
      {'video_file': 'stimuli/stimuli_va_va_va_va.mp4', 'condition': 'congruent', 'sound': 'va_va'}]
    Routine fixation
    Routine trial
    Routine response
  LoopTerminator blocks_loop
  Routine thank_you
